OpenViBE-Scenario
Comment
  Configurable box
Comment
  Take from 3.0 to 15.0 seconds (37 outputs)
  Then output classification results ( output each 0.3 sec and began from 3.0 sec)
  4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9
  7.2 7.5 7.8 8.1 8.4 8.7 9.0 9.3 9.6 9.9
  10.2 10.5 10.8 11.1 11.4 11.7 12.0 12.3 12.6 12.9
  13.2 13.5 13.8 14.1 14.4 14.7 15.0

Generic stream reader
  Filename =

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#1.Signal stream -> Channel Selector "1;2;3;4;5;6;7;8" => #3
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #4
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#4 -> P300 Identifier Stimulator(modified) => #5
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 10
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> 0xc67a01dc P300 Identifier Target Generation (modified) => #6
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#7 -> Stimulation listener (P300-TARGET)
  Log level to use = Information
Sequence stimulations=#5, Target stimulations=#6 -> P300 Identifier Card Visualisation => #10
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Data=#1.Signal stream, Stimulations=#5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> Identity => #12
Input signal=#2, Input stimulations=#12 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#13.Resynced stimulations -> Stimulation listener (SBE)
  Log level to use = Information
#13.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal.csv
  Column separator = ;
  Precision = 10
#13.Epoched signal -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;
  Number of output channels = 1
  Number of input channels = 8
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 8
  Low cut frequency (Hz) = 10.000000
  High cut frequency (Hz) = 19.99999
  Pass band ripple (dB) = 0.500000
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #20
  Spectral components = Amplitude
#20.Amplitude -> FFT of average signal
  Minimum frequency to display = 8.000000
  Maximum frequency to display = 24.000000
#20.Amplitude -> (FFT spectral) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPFFTSpectralSignal.csv
  Column separator = ;
  Precision = 10
#12 -> Stimulation Filter (P300Trial Start&Stop) => #23
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#23 -> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#5 -> Stimulation Filter (P300-Stimulation) => #26
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#26 -> 0xc73e83ec Stimulation listener (P300-Stimulation)
  Log level to use = Information
Input stream 1=#26, Input stream 2=#7, Input stream 3=#10, Input stream 4=#12 -> Identity => #29
#4 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
#4 -> 0xc73e83ec SSVEP Training Controller => #31
  Lua Script = ${Player_ScenarioDirectory}/Script/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4
  Stimulation duration = 15
  Break duration = 3
  Flickering delay = 2.000000
#31.Stimulations -> 0xc73e83ec Stimulation Filter (VisualStimulation Start&Stop) => #32
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_VisualStimulationStart
  Stimulation range end = OVTK_StimulationId_VisualStimulationStop
-> 0xc73e83ec UDP Sender (VisualStimulation Start&Stop)
  Host = localhost
  Port = 20326
#32 -> 0xc73e83ec Stimulation listener (VisualStimulation Start&Stop)
  Log level to use = Information
#31.New output -> 0xc73e83ec UDP Sender (SSVEP Target Number)
  Host = localhost
  Port = 20322
Input stimulations 1=#31.Stimulations, Input stimulations 2=#31.New output -> Stimulation multiplexer => #36
Input stream 1=#1.Signal stream, Input stream 2=#4 -> Identity => #37
Input stream 1=#3, Input stream 3=#29.Output stream 1, Input stream 5[2]=#29.Output stream 2, Input stream 6[3]=#29.Output stream 3, Input stream 5[4]=#29.Output stream 4, Input stream 7=#37.Output stream 2 -> 0xc73e83ec Generic stream writer "Ch1-8(P300)"
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[$core{date}-$core{time}]AcquiredSignal(P300).ov
  Use compression = false
Input stream 1=#37.Output stream 1, Input stream 3=#29.Output stream 1, Input stream 5[2]=#29.Output stream 2, Input stream 6[3]=#29.Output stream 3, Input stream 5[4]=#29.Output stream 4, Input stream 6[5]=#36, Input stream 7=#37.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[$core{date}-$core{time}]AcquiredSignal(ALL).ov
  Use compression = false
Input stream 1=#2, Input stream 6[5]=#36, Input stream 7=#37.Output stream 2 -> 0xc73e83ec Generic stream writer "Ch9-16(SSVEP)"
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[$core{date}-$core{time}]AcquiredSignal(SSVEP).ov
  Use compression = false
