OpenViBE-Scenario
Comment
  [2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2016.01.18-15.16.36]AcquiredSignal(ALL).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
#0.Output stream 3 -> Stimulation Filter (P300-TARGET) => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> Stimulation listener (P300-TARGET)
  Log level to use = Information
#0.Output stream 5 -> Stimulation Filter (P300Trial Start&Stop) => #3
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #5
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Data=#5, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#5, Input stream 2=#1, Input stream 3=#3 -> Identity => #7
#7.Output stream 1 -> Spatial Filter (CSP1) => #8
  Spatial Filter Coefficients = -4.709717e-001 -6.875185e-001 3.409230e-006 -5.527241e-001 -2.030894e-006 2.560309e-007 9.687607e-008 -7.962570e-007 -6.095854e-001 7.753045e-001 8.608962e-009 -1.652531e-001 2.175834e-009 -2.186113e-009 1.149901e-008 -3.652865e-009
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-1.cfg
Input stream 1=#8, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #9
#9.Output stream 1 -> Temporal filter "Frequency 1" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10
  High cut frequency (Hz) = 11.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
New input[0]=#9.Output stream 2, New input[1]=#9.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #11
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#10, Input stimulations=#11.Stimulations -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#12.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #17
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#10, Input stimulations=#11.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#19.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #24
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP2) => #26
  Spatial Filter Coefficients = -7.321430e-001 6.786162e-001 -1.372048e-008 5.870843e-002 -1.582030e-008 1.267886e-009 8.726941e-010 -1.243749e-008 -7.001351e-001 -4.053557e-001 2.995554e-007 -5.877905e-001 3.434285e-007 1.103548e-007 -4.591754e-007 -1.065957e-007
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-2.cfg
Input stream 1=#26, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #27
#27.Output stream 1 -> Temporal filter "Frequency 2" => #28
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 16.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
New input[0]=#27.Output stream 2, New input[1]=#27.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #29
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 2
  Non Targets = 1 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#28, Input stimulations=#29.Stimulations -> Stimulation based epoching "SBE" => #30
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#30.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #35
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#28, Input stimulations=#29.New output -> Stimulation based epoching "SBE" => #37
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#37.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #42
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureNonTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP3) => #44
  Spatial Filter Coefficients = -8.469842e-001 -1.280683e-002 -4.923095e-009 -5.314637e-001 2.348530e-009 -1.762772e-009 3.758005e-009 3.836228e-009 6.968877e-002 7.388481e-001 -4.780500e-005 -6.702589e-001 -2.142833e-005 -3.747904e-005 -7.512869e-006 7.624026e-005
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-3.cfg
Input stream 1=#44, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #45
New input[0]=#45.Output stream 2, New input[1]=#45.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #46
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 3
  Non Targets = 1 2 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#45.Output stream 1 -> Temporal filter "Frequency 3" => #47
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 13.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
Input signal=#47, Input stimulations=#46.Stimulations -> Stimulation based epoching "SBE" => #48
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#48.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #53
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#47, Input stimulations=#46.New output -> Stimulation based epoching "SBE" => #55
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#55.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #60
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureNonTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP4) => #62
  Spatial Filter Coefficients = -9.155104e-001 -9.443759e-002 1.666540e-009 -3.910527e-001 1.104374e-009 -1.284886e-010 -3.590311e-009 8.008683e-009 2.678860e-001 -8.371516e-001 -5.406753e-005 4.768797e-001 4.421593e-005 1.634966e-005 5.514381e-005 -1.516217e-005
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-4.cfg
Input stream 1=#62, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #63
New input[0]=#63.Output stream 2, New input[1]=#63.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #64
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 4
  Non Targets = 1 2 3
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#63.Output stream 1 -> Temporal filter "Frequency 4" => #65
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 17
  High cut frequency (Hz) = 18.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
Input signal=#65, Input stimulations=#64.Stimulations -> Stimulation based epoching "SBE" => #66
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#66.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #71
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#65, Input stimulations=#64.New output -> Stimulation based epoching "SBE" => #73
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#73.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #78
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/record-FeatureNonTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout 150sec => #80
  Timeout delay = 150
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#80, Features for class 1=#17, Features for class 2=#24 -> Classifier trainer 1 => #81
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#80, Features for class 1=#35, Features for class 2=#42 -> Classifier trainer 2 => #82
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#80, Features for class 1=#53, Features for class 2=#60 -> Classifier trainer 3 => #83
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#80, Features for class 1=#71, Features for class 2=#78 -> Classifier trainer 4 => #84
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
New input[0]=#81, New input[1]=#82, New input[2]=#83, New input[3]=#84 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
