OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.7 = 179 plots
  TARGET = 40 times * 179 plots = 7160 plots
  NonTARGET = 160 times * 179 plots = 28640 plots
Comment
  Should be 25 plots
  64 Hz * 0.4 sec = 25.6 -> 25 plots
  25 plots * 10 (Target stimulus of 1 trial) = 250 plots
  Epoc(10) = 250 / 10 = 25
Comment
  Should be 75 (25 * 3) plots
  25 plots * 30 (Non Target stimulus of 1 trial) = 750 plots
  Epoc(10) = 750 / 10 = 75

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2016.02.01-15.05.50]AcquiredSignal(Acqire).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
New input[0]=#1.Output stream 2, New input[1]=#1.Output stream 3 -> Target-NonTarget-Separator => #3
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#4.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[$core{date}-$core{time}]-P300-SBE-AllTarget.csv
  Column separator = ;
  Precision = 10
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#6.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[$core{date}-$core{time}]-P300-SBE-AllNonTarget.csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #8
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Data=#8, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #11
  Decimation factor = 4
#0.Output stream 5 -> Stimulation Filter (Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
Input stream 1=#11, Input stream 2=#14 -> Identity "Targets" => #15
#15.Output stream 2 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-TargetOrder[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#15.Output stream 1 -> Identity "Signal" => #17
#15.Output stream 1 -> Identity "Signal" => #18
#15.Output stream 1 -> Identity "Signal" => #19
#15.Output stream 1 -> Identity "Signal" => #20
#0.Output stream 2 -> Stimulation Filter "Stimulus 1" => #21
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#21, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #22
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#17, Input stimulations=#22.Stimulations -> Stimulation based epoching "SBE" => #23
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#23.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[5-Hybrid] [$core{date}-$core{time}]-P300-SBE-Target1.csv
  Column separator = ;
  Precision = 10
#23.Epoched signal -> Epoch average => #25
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-EpochAverageTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#17, Input stimulations=#22.New output -> Stimulation based epoching "SBE" => #27
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#27.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget1.csv
  Column separator = ;
  Precision = 10
#27.Epoched signal -> Epoch average => #29
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-EpochAverageNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 2" => #31
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#31, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #32
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#18, Input stimulations=#32.Stimulations -> Stimulation based epoching "SBE" => #33
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#33.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget2"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target2.csv
  Column separator = ;
  Precision = 10
#33.Epoched signal -> Epoch average => #35
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#25, Input stream 2=#35 -> Streamed matrix multiplexer
-> Feature aggregator => #37
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_TargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#18, Input stimulations=#32.New output -> Stimulation based epoching "SBE" => #39
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#39.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget2"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget2.csv
  Column separator = ;
  Precision = 10
#39.Epoched signal -> Epoch average => #41
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#29, Input stream 2=#41 -> Streamed matrix multiplexer
-> Feature aggregator => #43
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 3" => #45
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#45, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #46
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#19, Input stimulations=#46.Stimulations -> Stimulation based epoching "SBE" => #47
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#47.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget3"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target3.csv
  Column separator = ;
  Precision = 10
#47.Epoched signal -> Epoch average => #49
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input signal=#19, Input stimulations=#46.New output -> Stimulation based epoching "SBE" => #50
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#50.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget3"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget3.csv
  Column separator = ;
  Precision = 10
#50.Epoched signal -> Epoch average => #52
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
#0.Output stream 2 -> Stimulation Filter "Stimulus 4" => #53
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#53, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #54
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#20, Input stimulations=#54.Stimulations -> Stimulation based epoching "SBE" => #55
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#55.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget4"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target4.csv
  Column separator = ;
  Precision = 10
#55.Epoched signal -> Epoch average => #57
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#49, Input stream 2=#57 -> Streamed matrix multiplexer
-> Feature aggregator => #59
-> 0xc67a01dc (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_TargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#20, Input stimulations=#54.New output -> Stimulation based epoching "SBE" => #61
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#61.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget4"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget4.csv
  Column separator = ;
  Precision = 10
#61.Epoched signal -> Epoch average => #63
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#52, Input stream 2=#63 -> Streamed matrix multiplexer
-> Feature aggregator => #65
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout 5min => #67
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#67, Features for class 1=#37, Features for class 2=#43 -> Classifier trainer A => #68
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifierA.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 4
Stimulations=#67, Features for class 1=#59, Features for class 2=#65 -> Classifier trainer B => #69
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifierB.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 4
New input[0]=#68, New input[1]=#69 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
