OpenViBE-Scenario
Comment
  Take signal from 1.5 to 7.5 seconds (6.0 seconds) * 4 stimuli
  6.0 sec * 4 stimuli = 24.0 sec
  Totally: 256 Hz * 24.0 sec = 6144 plots
Comment
  Take 17 durations (1.2 sec window in each 0.3 sec) * 4 stimuli each
  (2.7 3.0 3.3 3.6 3.9 4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9 7.2 7.5)
  256 Hz * 1.2 sec = 307.2 -> 307 plots
  307 plots * 17 outputs =  5219 plots
  5219 plots * 4 stimuli = 20876 plots
Comment
  Average those 17 durations * 4 stimuli => 68 plots each
Comment
  Read file from "[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg"

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "1;2;3;4;5;6;7;8" => #3
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #4
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#4 -> P300 Identifier Stimulator(modified) => #5
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 5
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #6
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#7 -> Stimulation listener (P300-TARGET)
  Log level to use = Information
Data=#1, Stimulations=#5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> Identity => #11
Input signal=#2, Input stimulations=#11 -> Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #12
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] SBE_Duration-6.0_Offset-1.5.cfg
#12.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -1.462972e-001 -7.246848e-001 2.259448e-001 3.696417e-002 3.290125e-002 -8.457478e-004 -1.097567e-001 6.228017e-001 -2.147245e-001 -2.178566e-001 5.957404e-002 -8.181576e-002 2.885516e-001 -4.264748e-001 -1.155258e-001 7.859389e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #19
-> Classifier processor "4cls-SSVEPclassifier-1" => #20
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-1.cfg
#20.Probability values -> Epoch average "EPOC17" => #21
  Averaging type = Epoch block average
  Epoch count = 17
#12.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = -1.400111e-001 -1.192449e-001 3.476082e-001 5.865646e-002 -7.496528e-001 -1.611613e-001 4.727179e-001 1.746170e-001 -1.201520e-001 -2.113312e-001 3.369834e-001 -1.482437e-001 -4.599632e-001 3.903929e-001 5.735882e-001 -3.352497e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #28
-> Classifier processor "4cls-SSVEPclassifier-2" => #29
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-2.cfg
#29.Probability values -> Epoch average "EPOC17" => #30
  Averaging type = Epoch block average
  Epoch count = 17
#12.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 5.519045e-001 -5.823425e-001 -3.995895e-001 2.187109e-002 -1.314429e-001 3.681145e-001 -1.083549e-001 1.777702e-001 5.413971e-001 3.977717e-001 -4.148948e-001 -4.480715e-001 1.189518e-001 2.843601e-001 -6.428123e-002 -2.768010e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #37
Input stream 1=#19, Input stream 2=#37 -> 0xc73e83ec Streamed matrix multiplexer
-> 0xc73e83ec Classifier processor "2cls-SSVEPclassifier-A" => #39
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-A.cfg
#39.Probability values -> 0xc73e83ec Epoch average "EPOC34"
  Averaging type = Epoch block average
  Epoch count = 34
#37 -> Classifier processor "4cls-SSVEPclassifier-3" => #41
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-3.cfg
#41.Probability values -> Epoch average "EPOC17" => #42
  Averaging type = Epoch block average
  Epoch count = 17
#12.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = 1.435320e-001 -2.138980e-002 -2.232115e-001 4.152887e-002 -6.289001e-001 1.167232e-003 7.155191e-001 1.410982e-001 2.633258e-001 1.930058e-002 -7.882889e-001 -3.327035e-001 2.885877e-001 2.609136e-001 2.114309e-001 4.619747e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #49
Input stream 1=#28, Input stream 2=#49 -> 0xc73e83ec Streamed matrix multiplexer
-> 0xc73e83ec Classifier processor "2cls-SSVEPclassifier-B" => #51
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-B.cfg
#51.Probability values -> 0xc73e83ec Epoch average "EPOC34"
  Averaging type = Epoch block average
  Epoch count = 34
#49 -> Classifier processor "4cls-SSVEPclassifier-4" => #53
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-4.cfg
#53.Probability values -> Epoch average "EPOC17" => #54
  Averaging type = Epoch block average
  Epoch count = 17
#11 -> Stimulation Filter (P300Trial Start&Stop) => #55
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#55 -> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#5 -> Stimulation Filter (P300-Stimulation) => #58
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#4 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
Input stream 1=#1, Input stream 2=#4 -> Identity => #61
Sequence stimulations=#5, Target stimulations=#6, Card selection stimulations=#115 -> P300 Identifier Card Visualisation => #62
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Input stream 1=#58, Input stream 2=#7, Input stream 3=#62, Input stream 4=#11 -> Identity => #63
Input stream 1=#3, Input stream 2=#63.Output stream 4 -> Identity => #64
#64.Output stream 1 -> Temporal filter "LowPASS 9Hz for P300 signals" => #65
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] LowPASS-9Hz.cfg
-> Signal Decimation 1/4 => #66
  Decimation factor = 4
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label1 (0.1-0.3)" => #67
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#67.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-1" => #70
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-1(0.1-0.3).cfg
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label2 (0.1-0.3)" => #71
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#71.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-2" => #74
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-2(0.1-0.3).cfg
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label3 (0.1-0.3)" => #75
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#75.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-3" => #78
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-3(0.1-0.3).cfg
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label1 (0.4-0.6)" => #79
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#79.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-1" => #82
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-1(0.4-0.6).cfg
Input stream 1=#70.Probability values, Input stream 2=#82.Probability values -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #84
  Averaging type = Epoch block average
  Epoch count = 2
Input stream 1=#84, Input stream 2=#21 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #86
  Averaging type = Epoch block average
  Epoch count = 2
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label2 (0.4-0.6)" => #87
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#87.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-2" => #90
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-2(0.4-0.6).cfg
Input stream 1=#74.Probability values, Input stream 2=#90.Probability values -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #92
  Averaging type = Epoch block average
  Epoch count = 2
Input stream 1=#92, Input stream 2=#30 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #94
  Averaging type = Epoch block average
  Epoch count = 2
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label3 (0.4-0.6)" => #95
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#95.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-3" => #98
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-3(0.4-0.6).cfg
Input stream 1=#78.Probability values, Input stream 2=#98.Probability values -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #100
  Averaging type = Epoch block average
  Epoch count = 2
Input stream 1=#100, Input stream 2=#42 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #102
  Averaging type = Epoch block average
  Epoch count = 2
Input signal=#66, Input stimulations=#64.Output stream 2 -> Stimulation based epoching "SBE Label4 (0.1-0.3)" => #103
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#103.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-4" => #106
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-4(0.1-0.3).cfg
Input signal=#66, Input stimulations=#64.Output stream 2 -> 0xc67a01dc Stimulation based epoching "SBE Label4 (0.4-0.6)" => #107
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#107.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "4cls-p300-classifier-4" => #110
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-4(0.4-0.6).cfg
Input stream 1=#106.Probability values, Input stream 2=#110.Probability values -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #112
  Averaging type = Epoch block average
  Epoch count = 2
Input stream 1=#112, Input stream 2=#54 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #114
  Averaging type = Epoch block average
  Epoch count = 2
Classification result 0=#86, Classification result 1=#94, Classification result 2=#102, Classification result 3=#114 -> Hybrid Voting Classifier (1) => #115
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result Hybrid Voting Classifier (1)"
  Log level to use = Information
#115 -> UDP Sender (Hybrid-Classification-Result)
  Host = localhost
  Port = 20323
#65 -> Channel Selector "1;5;6" => #118
  Channel List = 1;5;6
  Action = Select
  Channel Matching Method = Smart
Input signal=#118 -> Stimulation based epoching "SBE Label1 (0.1-0.3)" => #119
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#119.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "2cls-p300-classifierAB"
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-AB.cfg
Input signal=#118 -> Stimulation based epoching "SBE Label2 (0.1-0.3)" => #123
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#123.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "2cls-p300-classifierAB"
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-AB.cfg
Input signal=#118 -> Stimulation based epoching "SBE Label3 (0.1-0.3)" => #127
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#127.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "2cls-p300-classifierAB"
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-AB.cfg
Input signal=#118 -> Stimulation based epoching "SBE Label4 (0.1-0.3)" => #131
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#131.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor "2cls-p300-classifierAB"
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-AB.cfg
Input stream 1=#61.Output stream 1, Input stream 3=#63.Output stream 1, Input stream 5[2]=#63.Output stream 2, Input stream 6=#63.Output stream 3, Input stream 5[4]=#63.Output stream 4, Input stream 7=#61.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[6] AcquiredSignal(Trial)[$core{date}-$core{time}].ov
  Use compression = false
